PsychoPy2experiment version="1.90.1"
Settings
  Monitor = testMonitor
  color = $[-1.000,-1.000,-1.000]
  Experiment info = {u'trials_per_cond': u'40', u'session': u'01', u'prac_type': u'random', u'subjnum': u''}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Save csv file = True
  Data filename = u'data' + os.sep + 'GNGxEscapeAvoid_sub_%s_sess_%s_%s' %(expInfo['subjnum'],expInfo['session'], expInfo['date'])
  expName = GoNoGo_x_EscapeAvoid
  Screen = 1
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Routines
  Routine taskend
    TextComponent text
      wrapWidth = 35
      text [set every repeat] = $taskendmsg
      pos = [0, 3]
      units = cm
      startVal [time (s)] = 0.0
      letterHeight = 1
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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    CodeComponent taskendcode
      Begin Experiment:
        taskendmsg = 'The task has ended.\n\n\nThank you very much for participating and sorry about the sound!'
    MouseComponent mouse_4
      timeRelativeTo = routine
      forceEndRoutineOnPress = any click
      startVal [time (s)] = 0.0
      saveMouseState = final
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  Routine target
    ImageComponent target_img
      stopVal [duration (s)] = $target_dur
      units = cm
      startVal [time (s)] = 0.0
      image [set every repeat] = $CuePic_from_dict
      size = [8.1, 8.1]
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    CodeComponent press_msg
      Begin Experiment:
        choose_text = visual.TextStim(win=win, ori=0, name='Choose_Text',
            text='CHOOSE: PRESS OR NOT PRESS',    font='Arial',
            units='cm', pos=[0, 7], height=1, wrapWidth=35,
            color='white', colorSpace='rgb', opacity=1,
            depth=-2.0)
      Begin Routine:
        choose_text.setAutoDraw(True)
      End Routine:
        targetComponents.append(choose_text)
        choose_text.setAutoDraw(False)
      Each Frame:
        if len(target_resp.keys) > 0:
            choose_text.setAutoDraw(False)
    KeyboardComponent target_resp
      stopVal [duration (s)] = target_dur
      forceEndRoutine = False
      allowedKeys [set every repeat] = allwd_keys
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent go__skp_to_fdbk
      End Routine:
        if target_resp.keys != None:
            go_resp = 1
        elif target_resp.keys == None:
            go_resp = 0
      Each Frame:
        if fdbk_aftertarget1_afterpress2 == 2 and len(target_resp.keys) > 0:
            continueRoutine = False
  Routine iti
    TextComponent iti_screen
      text = +
      stopVal [duration (s)] = iti_dur
      units = cm
      startVal [time (s)] = 0.0
      letterHeight = 2
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  Routine sound_chk_intro_past
    TextComponent soundchktxt1
      wrapWidth = 30
      units = cm
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        This task involves unpleasant sounds. First, we would like you to rate the unpleasantness of the sound.






        Click the mouse or press the spacebar to listen to the sound and make your rating.
    KeyboardComponent sound_chk_key_resp
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      timeRelativeTo = routine
      forceEndRoutineOnPress = any click
      startVal [time (s)] = 0.0
      saveMouseState = final
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  Routine prac_iti
    TextComponent b_iti_screen_2_
      text = +
      stopVal [duration (s)] = iti_dur
      units = cm
      startVal [time (s)] = 0.0
      letterHeight = 2
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    CodeComponent b_iti_quit_prac_2_
      Begin Routine:
        if target_resp_2=='q':
            continueRoutine=False
            practrials.finished=True
      Each Frame:
        if target_resp_2=='q':
            continueRoutine=False
            practrials.finished=True
  Routine sound_chk_intro_past_end
    TextComponent soundchktxt1_4
      wrapWidth = 30
      units = cm
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        The task is over. Thank you for completing it.

        We're going to ask you to rate the sound once again.





        Click the mouse or press the spacebar to listen to the sound and make your rating.
    KeyboardComponent sound_chk_key_resp_3
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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    MouseComponent mouse_3
      timeRelativeTo = routine
      forceEndRoutineOnPress = any click
      startVal [time (s)] = 0.0
      saveMouseState = final
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  Routine fdbk
    CodeComponent fdbk_msg_dur
      Begin Experiment:
        #Set message to inform on feedback
        if if_nosound_skipfdbk == 1:
            go_msg = '\n\n           PRESS \n\n Skipping to next trial'
            nogo_msg = '\n\n      NOT PRESS \n\n Skipping to next trial'
        elif  if_nosound_skipfdbk == 0:
            go_msg = '\n   PRESS'
            nogo_msg = '\n NOT PRESS'
      Begin Routine:
        if fdbk_aftertarget1_afterpress2 == 2 and target_resp.keys != None and Condition == 'escape':
            fdbk_dur = fdbk_dur_orig+(target_dur - target_resp.rt)
        else:
            fdbk_dur = fdbk_dur_orig

        if go_resp == 1:
            fdbk_msg=go_msg
        elif go_resp == 0:
            fdbk_msg=nogo_msg
      End Routine:
        fdbkComponents.append(fdbk_dur)
        trials.addData('fdbk_dur', fdbk_dur)
        fdbk_dur = fdbk_dur_orig
    CodeComponent fdbk_det_sound
      Begin Experiment:
        #Functions

        def corr_v_prob_err(trialcorrect):
          if (trialcorrect == CorrResp_eq_NoSound):
           return 'off'
          elif trialcorrect != CorrResp_eq_NoSound:
           return 'on'

        def sound_fdbk_det_outcome(correct_resp,keypressed):
         if (correct_resp == 'go' and go_resp == 1) or (correct_resp == 'nogo' and go_resp == 0):
          trialcorrect = 1
         elif (correct_resp == 'nogo' and go_resp == 1) or (correct_resp == 'go' and go_resp == 0):
          trialcorrect = 0

         sound_fdbk_outcome = corr_v_prob_err(trialcorrect)

         if sound_fdbk_outcome == 'off':
          sound_fdbk = 0
         else:
          sound_fdbk = 1

         return trialcorrect,sound_fdbk_outcome,sound_fdbk
      Begin Routine:
        trialcorrect,sound_fdbk_outcome,sound_fdbk = sound_fdbk_det_outcome(CorrectResp,go_resp)
      End Routine:
        #End Routine
        trials.addData('trialcorrect', trialcorrect)
        trials.addData('sound_fdbk_outcome', sound_fdbk_outcome)
        trials.addData('sound_fdbk', sound_fdbk)
    CodeComponent fdbk_play_sound
      Begin Experiment:
        import random
      Begin Routine:
        trialsounds1,trialsounds2 = random.sample([sound1,sound2,sound3],2)

        #FeedbackSoundCode
        #set up variable and volume for feedback sound (trialsounds and fdbk_dur are set in starting vars)
        feedbacksound1= sound.Sound(trialsounds1, secs=fdbk_dur)
        feedbacksound1.setVolume(5)
        feedbacksound2= sound.Sound(trialsounds2, secs=fdbk_dur)
        feedbacksound2.setVolume(5)

        if Condition == 'escape' and sound_fdbk == 0:
            cuesound1.stop()
            cuesound2.stop()
        elif Condition == 'avoid' and sound_fdbk == 1:
            feedbacksound1.play()
            feedbacksound2.play()
      End Routine:
        fdbkComponents.append(feedbacksound1)
        fdbkComponents.append(feedbacksound2)
        trials.addData('sound_fdbk', sound_fdbk)

        if Condition == 'escape' and sound_fdbk == 1:
            cuesound1.stop()
            cuesound2.stop()
        elif Condition == 'avoid' and sound_fdbk == 1:
            feedbacksound1.stop()
            feedbacksound2.stop()
    CodeComponent fdbk_image
      Begin Experiment:
        if fdbk_img_on == 1:
         fdbk_img = visual.ImageStim(win=win, name='soundimage',units='cm',image='sin', mask=None,ori=0, pos=[0, -3], size=[16.4, 6.8],color=[1,1,1], colorSpace='rgb', opacity=1, texRes=128, interpolate=True, depth=-5.0)
      Begin Routine:
        if fdbk_img_on == 1:
            if sound_fdbk == 0:
                soundimages = 'Pics/Feedback/NoNoiseBlue.png'
            elif sound_fdbk == 1:
                soundimages = 'Pics/Feedback/LoudNoise.png'

            fdbk_img.setImage(soundimages)
            fdbk_img.setAutoDraw(True)
      End Routine:
        if fdbk_img_on == 1:
            fdbkComponents.append(fdbk_img)
            fdbk_img.setAutoDraw(False)
    CodeComponent skip_feedback_code
      End Routine:
        trials.addData('fdbkskipdur', fdbkskipdur)
      Each Frame:
        if if_nosound_skipfdbk == 1 and sound_fdbk == 0:
            if t>=fdbkskipdur:
                continueRoutine = False
    TextComponent fdbk_msg_screen
      text [set every repeat] = $fdbk_msg
      stopVal [duration (s)] = $fdbk_dur
      pos = [0, 5]
      units = cm
      startVal [time (s)] = 0.0
      letterHeight = 1.3
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    TextComponent chose_msg
      text = You chose to
      stopVal [duration (s)] = $fdbk_dur
      pos = [0, 6]
      units = cm
      startVal [time (s)] = 0.0
      letterHeight = .6
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  Routine cue
    CodeComponent set_pic
      Begin Routine:
        CuePic_from_dict = pic_dict[CuePic]
      End Routine:
        trials.addData('CuePic_from_dict', CuePic_from_dict)
    ImageComponent cue_img
      stopVal [duration (s)] = $cue_dur
      units = cm
      startVal [time (s)] = 0.0
      image [set every repeat] = $CuePic_from_dict
      size = [8.1, 8.1]
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    KeyboardComponent cue_resp
      stopVal [duration (s)] = $cue_dur
      forceEndRoutine = False
      allowedKeys [set every repeat] = allwd_keys
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent cue_sound
      Begin Routine:
        import random
        trialsounds1,trialsounds2 = random.sample([sound1,sound2,sound3],2)

        #cueSoundCode
        #set up variable and volume for cue sound (trialsounds and cue_dur are set in starting vars)
        cuesound1= sound.Sound(trialsounds1, secs=cue_dur)
        cuesound1.setVolume(5)
        cuesound2= sound.Sound(trialsounds2, secs=cue_dur)
        cuesound2.setVolume(5)

        if Condition == 'escape':
            cuesound1.play()
            cuesound2.play()
  Routine prac_target
    CodeComponent quit_prac
      End Routine:
        if target_resp_2.keys=='q':
            practrials.finished=True
      Each Frame:
        if target_resp_2.keys=='q':
            continueRoutine=False
    ImageComponent target_img_2
      stopVal [duration (s)] = $target_dur
      units = cm
      startVal [time (s)] = 0.0
      image [set every repeat] = Pics/Fractals/1.bmp
      size = [8.1, 8.1]
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    CodeComponent press_msg_2
      Begin Experiment:
        choose_text = visual.TextStim(win=win, ori=0, name='Choose_Text',
            text='CHOOSE: PRESS OR NOT PRESS',    font='Arial',
            units='cm', pos=[0, 7], height=1, wrapWidth=35,
            color='white', colorSpace='rgb', opacity=1,
            depth=-2.0)
      Begin Routine:
        choose_text.setAutoDraw(True)
      End Routine:
        prac_targetComponents.append(choose_text)
        choose_text.setAutoDraw(False)
      Each Frame:
        if len(target_resp_2.keys) > 0:
            choose_text.setAutoDraw(False)
    KeyboardComponent target_resp_2
      stopVal [duration (s)] = target_dur
      forceEndRoutine = False
      allowedKeys [set every repeat] = allwd_keys
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent go__skp_to_fdbk_2
      End Routine:
        if target_resp_2.keys != None:
            go_resp = 1
        elif target_resp_2.keys == None:
            go_resp = 0
      Each Frame:
        if fdbk_aftertarget1_afterpress2 == 2 and len(target_resp_2.keys) > 0:
            continueRoutine = False
  Routine prac_cue
    ImageComponent cue_img_2
      stopVal [duration (s)] = $cue_dur
      units = cm
      startVal [time (s)] = 0.0
      image = Pics/Fractals/1.bmp
      size = [8.1, 8.1]
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    KeyboardComponent cue_resp_2
      stopVal [duration (s)] = $cue_dur
      forceEndRoutine = False
      allowedKeys [set every repeat] = allwd_keys
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent cue_sound_2
      Begin Routine:
        import random

        #cueSoundCode
        #set up variable and volume for cue sound (trialsounds and cue_dur are set in starting vars)
        cuesound1= sound.Sound(sound1, secs=cue_dur)
        cuesound1.setVolume(2)

        if Condition == 'escape':
            cuesound1.play()
  Routine prac_fdbk
    CodeComponent fdbk_quit_prac
      Begin Routine:
        if target_resp_2.keys == 'q':
            practrials.finished=True
            continueRoutine=False
      Each Frame:
        if target_resp_2.keys=='q':
            continueRoutine=False
            practrials.finished=True
    CodeComponent fdbk_msg_dur_2
      Begin Routine:
        if fdbk_aftertarget1_afterpress2 == 2 and target_resp_2.keys != None and Condition == 'escape':
            fdbk_dur = fdbk_dur_orig+(target_dur - target_resp_2.rt)
        else:
            fdbk_dur = fdbk_dur_orig

        if go_resp == 1:
            fdbk_msg=go_msg
        elif go_resp == 0:
            fdbk_msg=nogo_msg
      End Routine:
        prac_fdbkComponents.append(fdbk_dur)
        practrials.addData('fdbk_dur', fdbk_dur)
        fdbk_dur = fdbk_dur_orig
    CodeComponent fdbk_det_sound_2
      Begin Routine:
        trialcorrect,sound_fdbk_outcome,sound_fdbk = sound_fdbk_det_outcome(CorrectResp,go_resp)
      End Routine:
        #End Routine
        practrials.addData('trialcorrect', trialcorrect)
        practrials.addData('sound_fdbk_outcome', sound_fdbk_outcome)
        practrials.addData('sound_fdbk', sound_fdbk)
    CodeComponent fdbk_play_sound_2
      Begin Routine:
        #FeedbackSoundCode
        #set up variable and volume for feedback sound (trialsounds and fdbk_dur are set in starting vars)
        feedbacksound1= sound.Sound(sound1, secs=fdbk_dur)
        feedbacksound1.setVolume(3)

        if Condition == 'escape' and sound_fdbk == 0:
            cuesound1.stop()
        elif Condition == 'avoid' and sound_fdbk == 1:
            feedbacksound1.play()
      End Routine:
        prac_fdbkComponents.append(feedbacksound1)
        practrials.addData('sound_fdbk', sound_fdbk)

        if Condition == 'escape' and sound_fdbk == 1:
            cuesound1.stop()
        elif Condition == 'avoid' and sound_fdbk == 1:
            feedbacksound1.stop()
    CodeComponent fdbk_image_2
      Begin Routine:
        if fdbk_img_on == 1:
            if sound_fdbk == 0:
                soundimages = 'Pics/Feedback/NoNoiseBlue.png'
            elif sound_fdbk == 1:
                soundimages = 'Pics/Feedback/LoudNoise.png'

            fdbk_img.setImage(soundimages)
            fdbk_img.setAutoDraw(True)
      End Routine:
        if fdbk_img_on == 1:
            prac_fdbkComponents.append(fdbk_img)
            fdbk_img.setAutoDraw(False)
    CodeComponent skip_feedback_code_2
      End Routine:
        practrials.addData('fdbkskipdur', fdbkskipdur)
      Each Frame:
        if if_nosound_skipfdbk == 1 and sound_fdbk == 0:
            if t>=fdbkskipdur:
                continueRoutine = False
    TextComponent fdbk_msg_screen_2
      text [set every repeat] = $fdbk_msg
      stopVal [duration (s)] = $fdbk_dur
      pos = [0, 5]
      units = cm
      startVal [time (s)] = 0.0
      letterHeight = 1.3
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    TextComponent chose_msg_2
      text = You chose to
      stopVal [duration (s)] = $fdbk_dur
      pos = [0, 6]
      units = cm
      startVal [time (s)] = 0.0
      letterHeight = .6
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  Routine sound_chk_rate_current
    TextComponent sound_chk_txt2_4
      wrapWidth = 30
      text = Please rate how unpleasant this sound was.
      pos = [0, 4]
      units = cm
      startVal [time (s)] = 2
      letterHeight = 1
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    CodeComponent sound_check_sound_3
      Begin Routine:
        trialsounds1,trialsounds2 = random.sample([sound1,sound2,sound3],2)

        #cueSoundCode
        #set up variable and volume for cue sound (trialsounds and cue_dur are set in starting vars)
        cuesound1= sound.Sound(trialsounds1, secs=cue_dur)
        cuesound1.setVolume(5)
        cuesound2= sound.Sound(trialsounds2, secs=cue_dur)
        cuesound2.setVolume(5)


        cuesound1.play()
        cuesound2.play()
      End Routine:
        cuesound1.stop()
        cuesound2.stop()
    RatingScaleComponent soundcheck_rating_3
      pos = 0, -0.4
      high = 1
      startVal [time (s)] = 2
      size = 1.9
      forceEndRoutine = True
      low = 0
      visualAnalogScale = True
      storeHistory = True
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    TextComponent sound_chk_txt2_3
      wrapWidth = 40
      text = not unpleasant                    a little                  fairly                  very                   extremely                  intolerable
      pos = [0, -3]
      units = cm
      startVal [time (s)] = 2
      letterHeight = .5
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  Routine instructions
    ImageComponent InstructionPictures
      pos [set every repeat] = [0, InstrPicYPos]
      units = cm
      startVal [time (s)] = 0.0
      image [set every repeat] = $InstructionPics
      size [set every repeat] = [InstrPicSize1,InstrPicSize2]
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    TextComponent instruction_text
      wrapWidth = 37
      pos [set every repeat] = [0, InstrYTextPos]
      units = cm
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text [set every repeat]:

        $"%s\n\n%s\n\n%s\n\n%s"%(InstructionsText, InstructionsText2, InstructionsText3,InstructionsText4)
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent reset_vars_code
      Begin Routine:
        escape_noresp_blocknum = escape_resp_blocknum = avoid_noresp_blocknum = avoid_resp_blocknum = 1
        escape_noresp_block_trialnum = escape_resp_block_trialnum = avoid_noresp_block_trialnum = avoid_resp_block_trialnum = 0
  Routine startvars
    CodeComponent starting_variables_2
      Begin Experiment:
        from psychopy import sound

        #Time in seconds
        #Cue duration (feedback will not respond to a key press during cue, but Psychopy will record a key press)
        cue_dur = 0
        #Target and ITI duration
        target_dur = 2
        iti_dur = 1

        fdbk_dur = 2
        #Set to 1 if you want transition to feedback to occur once target has ended
        #Set to 2 if you want transition to feedback to occur following a key press (not recommended)
        fdbk_aftertarget1_afterpress2 = 1
        fdbk_dur_orig = fdbk_dur

        #You could shorten the feedback duration for trials without sound
        #as a way to speed up the task (not recommended) Set to 1 to turn this on
        if_nosound_skipfdbk = 0
        #Duration of no sound feedback in secs
        fdbkskipdur = .75
        #Show an image during feedback
        fdbk_img_on = 1

        #available keys (misnamed target key b/c q will advance through the practice during the instructions)
        allwd_keys = ['space','q']

        #Sound files
        #Sound during practice
        prac_sound = 'Sounds/fullscrapefork_with2highpitch.wav'
        #Different sound clips
        sound1 = 'Sounds/fullscrapefork_with2highpitch.wav'
        sound2 = 'Sounds/fullscrapefork_with2highpitch_clip2.wav'
        sound3 = 'Sounds/fullscrapefork_with2highpitch_clip3.wav'
        #File of image during feedback (selected depending on whether sound is playing)
        soundimage = 'xxx.png'

        #Did sound play during feedback (regardless of correct or incorrect)
        #1 - yes, 0 = no
        sound_fdbk = 0
    CodeComponent determine_piclist_2
      Begin Experiment:
        pics = ['Pics/Fractals/6.bmp','Pics/Fractals/8.bmp','Pics/Fractals/11.bmp','Pics/Fractals/12.bmp']
        trialtypes = ['avoidGo_pic','escapeGo_pic','escapeNoGo_pic','avoidNoGo_pic']

        #Now shuffle pictures but make sure left and right do not have the same stim
        import random
        from random import shuffle

        random.shuffle(pics)
        random.shuffle(trialtypes)

        pic_dict = dict(zip(trialtypes,pics))
    CodeComponent shuffle_triallst
      Begin Experiment:
        main_trlst = os.path.join('TrialLists/', 'GoNoGo_x_EscapeAvoid_%dtrials.xlsx' %(int(expInfo['trials_per_cond'])))
        import pandas as pd
        import numpy as np
        trllst=pd.read_excel(main_trlst)
        a=list(range(1,trllst.GroupingOrder.max()+1))
        b = list(a)
        np.random.shuffle(b)
        trllst['randomize'] = np.random.normal(size = trllst.shape[0])
        trllst['GroupingOrder'] = trllst.GroupingOrder.replace(dict(zip(a,b)))
        trllst.sort_values(['GroupingOrder','randomize'],axis=0,inplace=True)
        trllst.reset_index(drop=True,inplace=True)
        trllst['TrialNum'] = range(1,trllst.shape[0]+1)

        trllst.to_excel(os.path.join('TrialLists/subs_trialLists','GNGxEscapeAvoid_TrialList_sub_%s_%s.xlsx' %(expInfo['subjnum'], expInfo['date'])))
        conditions_file = os.path.join('TrialLists/subs_trialLists','GNGxEscapeAvoid_TrialList_sub_%s_%s.xlsx' %(expInfo['subjnum'], expInfo['date']))

        #practice
        prac_type=expInfo['prac_type']
        prac_trlst = os.path.join('TrialLists/', 'TrialList_prac1.xlsx')
        prac_trllst=pd.read_excel(prac_trlst)
        if prac_type=='random':
         prac_type=np.random.choice(['go','nogo'])
        if prac_type=='go':
         prac_trllst.CorrectResp.replace({'nogo':'go'},inplace=True)
        prac_trllst.to_excel(os.path.join('TrialLists/subs_prac_trialLists','GNGxEscapeAvoid_PracTrialList_sub_%s_%s.xlsx' %(expInfo['subjnum'], expInfo['date'])))
        prac_conditions_file = os.path.join('TrialLists/subs_prac_trialLists','GNGxEscapeAvoid_PracTrialList_sub_%s_%s.xlsx' %(expInfo['subjnum'], expInfo['date']))
  Routine sound_chk_intro_current
    TextComponent soundchktxt1_3
      wrapWidth = 30
      units = cm
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        Now we're going to ask you to rate the sound again but this time we want you to rate it while the sound is playing.

        It will play for 2 seconds and then you can make your rating.



        Click the mouse or press the spacebar to listen to the sound and make your rating.
    KeyboardComponent sound_chk_key_resp_2
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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    MouseComponent mouse_2
      timeRelativeTo = routine
      forceEndRoutineOnPress = any click
      startVal [time (s)] = 0.0
      saveMouseState = final
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  Routine sound_chk_rate_past
    TextComponent sound_chk_txt2_1
      wrapWidth = 30
      pos = [0, 4]
      units = cm
      startVal [time (s)] = 2.0
      letterHeight = 1
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      text:
        Please rate how unpleasant this sound was.

        Click the ratings line to rate and then click the button to complete the rating.
    CodeComponent sound_check_sound
      Begin Routine:
        trialsounds1,trialsounds2 = random.sample([sound1,sound2,sound3],2)

        #cueSoundCode
        #set up variable and volume for cue sound (trialsounds and cue_dur are set in starting vars)
        cuesound1= sound.Sound(trialsounds1, secs=cue_dur)
        cuesound1.setVolume(5)
        cuesound2= sound.Sound(trialsounds2, secs=cue_dur)
        cuesound2.setVolume(5)


        cuesound1.play()
        cuesound2.play()
      End Routine:
        cuesound1.stop()
        cuesound2.stop()
      Each Frame:
        if t > 2:
            cuesound1.stop()
            cuesound2.stop()
    RatingScaleComponent soundcheck_rating
      pos = 0, -0.4
      high = 1
      startVal [time (s)] = 2
      size = 1.9
      forceEndRoutine = True
      low = 0
      visualAnalogScale = True
      storeHistory = True
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    TextComponent sound_chk_txt2_2
      wrapWidth = 40
      text = not unpleasant                    a little                  fairly                  very                   extremely                  intolerable
      pos = [0, -3]
      units = cm
      startVal [time (s)] = 2
      letterHeight = .5
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Flow
  Routine startvars
  Routine sound_chk_intro_past
  Routine sound_chk_rate_past
  Routine sound_chk_intro_current
  Routine sound_chk_rate_current
  LoopInitiator instructionsloop1 loopType="TrialHandler"
    conditionsFile = TrialLists/TrialList_Instructions1.xlsx
    conditions_file = TrialLists/TrialList_Instructions1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'InstrPicSize2': 8.46, 'Num': 1, 'InstructionPics': u'Pics/Instructions/None.jpg', 'InstrPicYPos': -6, 'InstructionsText3': u"Let's go through how it works", 'InstructionsText2': u'In this task you will make choices to avoid having to listen to an unpleasant sound', 'InstrPicSize1': 13.5, 'InstrYTextPos': 5, 'InstructionsText': u"Thank you for that. Now we'll introduce the task.", 'InstructionsText4': u' '},
      {'InstrPicSize2': 16.92, 'Num': 3, 'InstructionPics': u'Pics/Instructions/3wframe.jpg', 'InstrPicYPos': -6, 'InstructionsText3': u' ', 'InstructionsText2': u'These are the two choices that you have  - you can choose to PRESS the spacebar or NOT PRESS (do nothing)', 'InstrPicSize1': 27.0, 'InstrYTextPos': 5, 'InstructionsText': u'You will be presented with images like this and these words will appear: CHOOSE: PRESS OR NOT PRESS', 'InstructionsText4': u' '},
      {'InstrPicSize2': 10.5, 'Num': 4, 'InstructionPics': u'Pics/Instructions/Feedback.jpg', 'InstrPicYPos': -6, 'InstructionsText3': u' ', 'InstructionsText2': u'Obviously, your goal is to avoid hearing the sound.', 'InstrPicSize1': 26.0, 'InstrYTextPos': 5, 'InstructionsText': u"Your choice to PRESS or NOT PRESS will result in one of two outcomes: you'll (1) hear the unpleasant sound and see this pink angry line or you'll (2) hear nothing and see this straight blue line.", 'InstructionsText4': u' '},
      {'InstrPicSize2': 8.46, 'Num': 4, 'InstructionPics': u'Pics/Instructions/None.jpg', 'InstrPicYPos': -6, 'InstructionsText3': u'For other images NOT PRESSING will tend to avoid the sound.', 'InstructionsText2': u'For some images PRESSING will tend to avoid the sound. ', 'InstrPicSize1': 13.5, 'InstrYTextPos': 5, 'InstructionsText': u"During the task, you'll see a few different images.", 'InstructionsText4': u'You have to learn through trial and error to figure out the best response for each image.'}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
    Routine instructions
  LoopTerminator instructionsloop1
  LoopInitiator practrials loopType="TrialHandler"
    conditionsFile = $prac_conditions_file
    conditions_file = TrialLists/TrialList_prac1.xlsx
    loopType = sequential
    nReps = 1
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    Routine prac_cue
    Routine prac_target
    Routine prac_fdbk
    Routine prac_iti
  LoopTerminator practrials
  LoopInitiator instructionsloop2 loopType="TrialHandler"
    conditionsFile = TrialLists/TrialList_Instructions2.xlsx
    conditions_file = TrialLists/TrialList_Instructions2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'InstrPicSize2': 10.0, 'Num': 1, 'InstructionPics': u'Pics/Instructions/None.jpg', 'InstrPicYPos': -6, 'InstructionsText3': u' ', 'InstructionsText2': u' ', 'InstrPicSize1': 25.0, 'InstrYTextPos': 3, 'InstructionsText': u'What was the best response for the image during the practice?', 'InstructionsText4': u' '},
      {'InstrPicSize2': 10.0, 'Num': 1, 'InstructionPics': u'Pics/Instructions/None.jpg', 'InstrPicYPos': -6, 'InstructionsText3': u'Just ignore the sound and figure out whether PRESS or NOT PRESS turns the sound off most of the time. ', 'InstructionsText2': u"But when this happens, it doesn't mean anything.", 'InstrPicSize1': 25.0, 'InstrYTextPos': 3, 'InstructionsText': u"There's one more thing: For some images, the unpleasant sound will start right when the image appears. ", 'InstructionsText4': u' '},
      {'InstrPicSize2': 10.0, 'Num': 1, 'InstructionPics': u'Pics/Instructions/None.jpg', 'InstrPicYPos': -6, 'InstructionsText3': u' ', 'InstructionsText2': u'It does not depend on whether the sound is playing or not or your previous choices or anything else. ', 'InstrPicSize1': 25.0, 'InstrYTextPos': 3, 'InstructionsText': u'Avoiding the sound depends ONLY on the image that appears and your response to that image. ', 'InstructionsText4': u' '},
      {'InstrPicSize2': 10.0, 'Num': 1, 'InstructionPics': u'Pics/Instructions/None.jpg', 'InstrPicYPos': -6, 'InstructionsText3': u'(3) For one shape is there a response that will always turn off the sound?', 'InstructionsText2': u'(2) What is your goal?', 'InstrPicSize1': 25.0, 'InstrYTextPos': 3, 'InstructionsText': u"Let's make sure I've explained the tasks well: (1) what are your two choices?", 'InstructionsText4': u'(4) If an image is presented with the sound, does it give you a clue about whether to PRESS or NOT PRESS?'}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
    Routine instructions
  LoopTerminator instructionsloop2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $conditions_file
    conditions_file = $conditions_file
    loopType = sequential
    nReps = 1
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    Routine cue
    Routine target
    Routine fdbk
    Routine iti
  LoopTerminator trials
  Routine sound_chk_intro_past_end
  Routine sound_chk_rate_past
  Routine sound_chk_intro_current
  Routine sound_chk_rate_current
  Routine taskend
